#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic']

    servername: localhost
    remoteport: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    Keysight_33500B_hardware:
        module.Class: 'keysight33500b.Keysight33500b'

    TiS_Camera_hardware:
        module.Class: 'TiS_camera_hardware.TiS_Camera'

logic:
    Keysight_33500B_logic:
        module.Class: 'keysight_33500B_logic.Keysight_33500B_logic'
        connect:
            keysight_33500B_hardware: 'Keysight_33500B_hardware'

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    Keysight_33500B_GUI:
        module.Class: 'waveform_generator_keysight_33500b.keysight 33500b_gui.Keysight_33500B_GUI'
        connect:
            keysight_33500B_logic: 'Keysight_33500B_logic'



