#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic']

    servername: localhost
    remoteport: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    simpledatadummy:
        module.Class: 'simple_data_dummy.SimpleDummy'

    mykrowave:
        module.Class: 'microwave.mw_source_dummy.MicrowaveDummy'
        gpib_address: 'dummy'
        gpib_timeout: 20
        mock: True

    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic'

    mynicounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        clock_channel: '/Dev1/Ctr0'
        clock_frequency: 100
        counter_channel: '/Dev1/Ctr1'
        photon_source: '/Dev1/PFI3'
        count_distribution: 'dark_bright_poisson'
        remoteaccess: True

    mydummycounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        source_channels: 4
        clock_frequency: 100
        count_distribution: 'dark_bright_poisson'
        remoteaccess: True


    mynicard:
        module.Class: 'ni_card.NICard'
        clock_channel: '/Dev1/Ctr0'
        counter_channel: '/Dev1/Ctr1'
        scanner_clock_channel: '/Dev1/Ctr2'
        scanner_counter_channel: '/Dev1/Ctr3'
        photon_source: '/Dev1/PFI3'
        scanner_ao_channels: '/Dev1/AO0:3'
        gate_in_channel: '/Dev1/PFI9'
        odmr_trigger_channel: '/Dev1/PFI13'
        counting_edge_rising: True
        clock_frequency: 100
        scanner_clock_frequency: 100
        x_range: 0, 200
        y_range: 0, 200
        z_range: -100, 100
        a_range: 0, 200
        voltage_range: -10, 10
    
    distributer:
        module.Class: 'attocube.distributer.Distributer'
        clock_channel: '/Dev1/Ctr0'
        counter_channel: '/Dev1/Ctr1'
        scanner_clock_channel: '/Dev1/Ctr2'
        scanner_counter_channel: '/Dev1/Ctr3'
        photon_source: '/Dev1/PFI3'
        scanner_do_channels: '/Dev1/port0/line0:3'
        gate_in_channel: '/Dev1/PFI9'
        odmr_trigger_channel: '/Dev1/PFI3'
        counting_edge_rising: True
        clock_frequency: 100
        scanner_clock_frequency: 100
        x_range: 0, 200
        y_range: 0, 200
        z_range: -100, 100
        a_range: 0, 200
        voltage_range: -10, 10

    attocube:
        module.Class: 'attocube.attocube.Attocube'
        clock_channel: '/Dev1/Ctr0'
        counter_channel: '/Dev1/Ctr1'
        counter_channel2: '/Dev1/Ctr3'
        scanner_clock_channel: '/Dev1/Ctr2'
        scanner_counter_channel: '/Dev1/Ctr3'
        photon_source: '/Dev1/PFI8'
        photon_source2: '/Dev1/PFI9'
        scanner_do_channels: '/Dev1/Ctr1'
        scanner_do_channels2: '/Dev1/Ctr0'
        gate_in_channel: '/Dev1/PFI9'
        odmr_trigger_channel: '/Dev1/PFI13'
        counting_edge_rising: True
        clock_frequency: 100
        scanner_clock_frequency: 100
        x_range: 0, 200
        y_range: 0, 200
        z_range: -100, 100
        a_range: 0, 200
        voltage_range: -10, 10

    mynicard2:
        module.Class: 'attocube.nicard_digital.NIcard'
        clock_channel: '/Dev1/Ctr0'
        counter_channel: '/Dev1/Ctr1'
        scanner_clock_channel: '/Dev1/Ctr2'
        scanner_counter_channel: '/Dev1/Ctr3'
        photon_source: '/Dev1/PFI3'
        scanner_do_channels: '/Dev1/port0/line0:3'
        gate_in_channel: '/Dev1/PFI9'
        odmr_trigger_channel: '/Dev1/PFI13'
        counting_edge_rising: True
        clock_frequency: 100
        scanner_clock_frequency: 100
        x_range: 0, 200
        y_range: 0, 200
        z_range: -100, 100
        a_range: 0, 200
        voltage_range: -10, 10

    mydummyodmrcounter:
        module.Class: 'odmr_counter_dummy.ODMRCounterDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fitlogic.fitlogic'

    mydummyfastcounter:
        module.Class: 'fast_counter_dummy.FastCounterDummy'
        #choose_trace: True
        #gated: False

    mydummypulser:
        module.Class: 'pulser_dummy.PulserDummy'

    mydummywavemeter:
        module.Class: 'wavemeter_dummy.WavemeterDummy'
        measurement_timing: 10

    mydummyswitch1:
        module.Class: 'switches.switch_dummy.SwitchDummy'

    mydummyswitch2:
        module.Class: 'switches.switch_dummy.SwitchDummy'

    myspectrometer:
        module.Class: 'spectrometer.spectrometer_dummy.SpectrometerInterfaceDummy'
        connect:
            fitlogic: 'fitlogic.fitlogic'

    motordummy:
        module.Class: 'motor.motor_dummy.MotorDummy'

    magnetdummy:
        module.Class: 'magnet.magnet_dummy.MagnetDummy'

    processdummy:
        module.Class: 'process_dummy.ProcessDummy'

    laserdummy:
        module.Class: 'laser.simple_laser_dummy.SimpleLaserDummy'

logic:

    sliplslidelogic:
        module.Class: 'slipslide_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'distributer'
            savelogic: 'savelogic'

    simpledatalogic:
        module.Class: 'simple_data_logic.SimpleDataLogic'
        connect:
            simpledata: 'simpledatadummy'

    softpid:
        module.Class: 'software_pid_controller.SoftPIDController'
        connect:
            process: 'processdummy'
            control: 'processdummy'

    pidlogic:
        module.Class: 'pid_logic.PIDLogic'
        connect:
            controller: 'softpid'
            savelogic: 'savelogic'

    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    pulsedmasterlogic:
        module.Class: 'pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    sequencegeneratorlogic:
        module.Class: 'sequence_generator_logic.SequenceGeneratorLogic'

    pulseextractionlogic:
        module.Class: 'pulse_extraction_logic.PulseExtractionLogic'

    pulseanalysislogic:
        module.Class: 'pulse_analysis_logic.PulseAnalysisLogic'

    pulsedmeasurementlogic:
        module.Class: 'pulsed_measurement_logic.PulsedMeasurementLogic'
        connect:
            fastcounter: 'mydummyfastcounter'
            pulseanalysislogic: 'pulseanalysislogic'
            pulseextractionlogic: 'pulseextractionlogic'
            pulsegenerator: 'mydummypulser'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'mykrowave'

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mynicard2'
            savelogic: 'savelogic'

    gatedcounterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mydummycounter'
            savelogic: 'savelogic'

    wavemeterloggerlogic:
        module.Class: 'wavemeter_logger_logic.WavemeterLoggerLogic'
        logic_acquisition_timing: 20
        logic_update_timing: 100
        connect:
            wavemeter1: 'mydummywavemeter.highhinessewavemeter'
            savelogic: 'savelogic'
            counterlogic: 'counterlogic'

    switchlogic:
        module.Class: 'switch_logic.SwitchLogic'
        connect:
            switch1: 'mydummyswitch1'
            switch2: 'mydummyswitch2'

    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            savelogic: 'savelogic'

    scanner_tilt_interfuse:
        module.Class: 'interfuse.scanner_tilt_interfuse.ScannerTiltInterfuse'
        connect:
            confocalscanner1: 'mydummyscanner'

    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'scanner_tilt_interfuse'
            fitlogic: 'fitlogic'

    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic.scannerlogic'
            optimizer1: 'optimizerlogic.optimizerlogic'
            savelogic: 'savelogic.savelogic'

    odmrlogic:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            odmrcounter: 'mydummyodmrcounter.odmrcounter'
            fitlogic: 'fitlogic'
            microwave1: 'mykrowave'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'

    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
        #    dummytask:
        #        module: 'dummy'
        #        preposttasks: ['ppdummy']
        #    dummyinterruptor:
        #        module: 'dummy'
        #        pausetasks: ['dummytask']
        #        preposttasks: ['ppdummy2']
        #    ppdummy:
        #        module: 'prepostdummy'
        #    ppdummy2:
        #        module: 'prepostdummy'
            scannerLocationRefocus:
                module: 'refocus'
        #        preposttasks: ['fliplasermirror']
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizerlogic'
        #        config:
        #            initial: [1, 1, 1]
        #    fliplasermirror:
        #        module: 'flipmirror'
        #        needsmodules:
        #            switchlogic: 'switch'
        #        config:
        #            sequence: [('mydummyswitch1', 1, True), ('mydummyswitch1', 2, True), ('mydummyswitch2', 1, True)]

    automationlogic:
        module.Class: 'automation.AutomationLogic'
        connect:
            taskrunner: 'tasklogic.runner'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True


    trace_analysis_logic:
        module.Class: 'trace_analysis_logic.TraceAnalysisLogic'
        connect:
            counterlogic1: 'gatedcounterlogic'
            savelogic: 'savelogic'
            fitlogic: 'fitlogic'

    qdplotlogic:
        module.Class: 'qdplot_logic.QdplotLogic'
        connect:
            savelogic: 'savelogic'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    confocalgui_atto:
        module.Class: 'confocal_own.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'sliplslidelogic'
            savelogic: 'savelogic'

    counter:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counterlogic.counterlogic'

    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    poimanager:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic1: 'poimanagerlogic.poimanagerlogic'
            confocallogic1: 'scannerlogic.scannerlogic'

    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic.odmrlogic'
            savelogic: 'savelogic.savelogic'

    notebookgui:
        module.Class: 'notebook.notebookgui.NotebookWebView'

    taskrunner:
        module.Class: 'taskrunner.taskgui.TaskGui'
        connect:
            tasklogic: 'tasklogic.runner'

    simpledata:
        module.Class: 'simpledatagui.simpledatagui.SimpleDataGui'
        connect:
            simplelogic: 'simpledatalogic.simplelogic'

    gatedcounter:
        module.Class: 'gated_counter.gated_counter_gui.GatedCounterGui'
        connect:
            gatedcounterlogic1: 'gatedcounterlogic.counterlogic'
            traceanalysislogic1: 'trace_analysis_logic.traceanalysislogic1'